PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  color = $[1,1,1]
  Experiment info = {'participant': '', 'session': '001'}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  expName = mm_bilingualism
  Screen = 1
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Routines
  Routine trial
  Routine feedback
    TextComponent text_2
      color = black
      text [set every repeat] = $msg
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_2
  Routine match
    ImageComponent image
      stopVal [duration (s)] = 2.0
      pos = [-100, 0]
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = $images
      size [set every repeat] = [300,300]
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    TextComponent text
      color = black
      text [set every repeat] = $name
      stopVal [duration (s)] = 2.0
      pos = (.2, 0)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Begin Experiment:
        globalClock = core.MonotonicClock()
        routineClock = core.Clock()
        clock = core.Clock()

        msg='doh!'#if this comes up we forgot to update the msg!
      Begin Routine:
        routineClock.reset()
        thisExp.addData('begin_global', globalClock.getTime())
        thisExp.addData('begin_routine', routineClock.getTime())
      End Routine:
        thisExp.addData('end_global', globalClock.getTime())
        thisExp.addData('end_routine', routineClock.getTime())
        thisExp.addData('resp', key_resp_1.keys)
        thisExp.addData('rt', key_resp_1.rt)
        thisExp.addData('correct', key_resp_1.corr)

        if not key_resp_1.keys :
            msg="Failed to respond"
        elif key_resp_1.corr :#stored on last run routine
            msg="Correct!"
        else:
            msg="Wrong."
    KeyboardComponent key_resp_1
      correctAns = $corrAns
      storeCorrect = True
      stopVal [duration (s)] = 2.0
      forceEndRoutine = True
      allowedKeys = 'z','x'
      startVal [time (s)] = 0.0
      store = first key
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = images.xlsx
    loopType = random
    nReps = 5
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    conditions:
      [OrderedDict([('images', 'images/alligator.png')]),
      OrderedDict([('images', 'images/antelope.png')]),
      OrderedDict([('images', 'images/antlers.png')]),
      OrderedDict([('images', 'images/bacon.png')]),
      OrderedDict([('images', 'images/banana04a.png')]),
      OrderedDict([('images', 'images/bow.png')]),
      OrderedDict([('images', 'images/breadknife.png')])]
    Routine match
    Routine feedback
  LoopTerminator trials
